PsychoPy2experiment version="1.90.1"
Settings
  expName = axcptBetatest
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine cue
    TextComponent cue_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue
      letterHeight = 0.1
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  Routine target
    TextComponent target_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $target
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      allowedKeys = '1', '2'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $corrAns
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  Routine feedback
    CodeComponent code
      Begin Experiment:
        msg=''
      Begin Routine:
        if key_resp_2.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(key_resp_2.rt)
        else:
          msg="Oops! That was wrong"
      End Routine:
        prevA = False
        if cue_text == 'A':
            prevA = True
    TextComponent feedback_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      letterHeight = 0.1
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  Routine delay
    TextComponent delayy
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +++
      letterHeight = 0.1
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  Routine instructions
    TextComponent text
      startVal [time (s)] = 0.0
      text = Welcome to the AX-CPT!
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      startVal [time (s)] = 0.0
      allowedKeys = 'space'
      store = nothing
      forceEndRoutine = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    nReps = 144
    conditionsFile = axcpt_trialTypes.xlsx
    loopType = fullRandom
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    conditions:
      [OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'X'), ('corrAns', 'left')]),
      OrderedDict([('cue', 'A'), ('target', 'Y'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'A'), ('target', 'Y'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'A'), ('target', 'Y'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'B'), ('target', 'X'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'B'), ('target', 'X'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'B'), ('target', 'X'), ('corrAns', 'None')]),
      OrderedDict([('cue', 'B'), ('target', 'Y'), ('corrAns', 'None')])]
    Routine cue
    Routine delay
    Routine target
    Routine feedback
  LoopTerminator trials
